PsychoPy2experiment version="2022.2.5"
Settings
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = BACS_similarity_exp_Builder
  keyboardBackend = ioHub
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Routines
  Routine consent
    TextComponent consent_text
      letterHeight = 28
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 1800
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      text:
        Dichiaro di esprimere il mio consenso a partecipare allo studio e dichiaro:

             di aver letto attentamente le spiegazioni relative a questo studio e all’intera procedura sperimentale;

             di essere stato informata/o riguardo alle finalità e agli obiettivi della ricerca in questione;

             di aver avuto la possibilità di porre domande a proposito di qualsiasi aspetto della procedura sperimentale e di aver ottenuto risposte soddisfacenti;

             di essere a conoscenza dei disagi eventualmente causati dall’esperimento;

             di aver ricevuto soddisfacenti assicurazioni sulla riservatezza delle informazioni ottenute dall’esame della propria persona;

             di essere consapevole di potersi ritirare in qualsiasi fase dello studio.
    ButtonComponent button
      bold = True
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (-885, 160)
      save = last click
      saveStartStop = False
      size = [30,30]
      startVal [time (s)] = 0
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  Routine intro_screen
    TextComponent intro
      letterHeight = 28
      saveStartStop = False
      startVal [time (s)] = 0.0
      units = pix
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      text:
        Prima di cominciare, le chiediamo di leggere il modulo di consenso informato e confermare la sua volontà di partecipare all'esperimento.

        La preghiamo di ricordare che questo è un progetto di ricerca e che la sua partecipazione è completamente volontaria. Lei si potra' ritirare in qualunque momento, senza necessariamente dover dare alcuna spiegazione. Lo studio al quale Le si chiede di partecipare ha lo scopo di esaminare come i lettori elaborno le parole scritte. La somministrazione delle prove è individuale. Lei sarà impegnato in una sessione di lavoro della durata media di 10 minuti. L’ordine delle prove ed il loro svolgimento sono stabiliti in modo tale da evitare un eventuale affaticamento. Tutte le prove saranno precedute da un breve addestramento in modo tale che abbia la possibilità di familiarizzare con il compito. Sono previste alcune pause nel corso dello svolgimento dell’esperimento. Nonostante il testing preveda delle prove cognitive, il presente esperimento non costituisce una prova clinica che permetta la diagnosi di eventuali patologie.

        Per la Sua partecipazione all’esperimento riceverà un compenso di X euro.

        Tutti i dati raccolti grazie alla partecipazione Sua e di altre persone volontarie saranno custoditi in server sicuri e protetti da password, e non sarà consentito ad alcuna persona non autorizzata di accedervi. Le Sue informazioni personali saranno conservate separatamente dai risultati della presente ricerca, cui saranno associati soltanto attraverso un ID arbitrario. Grazie a questo processo di anonimizzazione dei dati, a nessun ricercatore sarà possibile analizzare i risultati sapendo da quale specifico partecipante essi provengono. Inoltre, questa procedura renderà impossibile la Sua identificazione anche nel momento in cui i risultati della ricerca fossero pubblicati su riviste scientifiche, o presentati a congressi o in qualsiasi altro pubblico consesso. Più in generale, i dati raccolti saranno trattati in accordo con le leggi sulla privacy e in conformità al Decreto Legislativo 30 giugno 2003 n. 196 “Codice in materia di protezione dei dati personali”.

        Prima di esprimere il suo consenso alla partecipazione, Le ricordiamo ancora che in caso Lei abbia bisogno di delucidazioni su qualunque aspetto della procedura sperimentale, il ricercatore è a Sua completa disposizione (aliebelt@sissa.it, davide.crepaldi@sissa.it).

        Le chiediamo di premere il tasto 'invio' per continuare al consenso.
    KeyboardComponent key_resp
      allowedKeys = 'space',
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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Flow
  Routine intro_screen
  Routine consent
