PsychoPy2experiment version="2022.2.5"
Settings
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = pix
  Window size (pixels) = [1280, 720]
  expName = PsychoPy Retry
  keyboardBackend = ioHub
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Routines
  Routine training
    TextComponent training_word
      font = BACS1
      letterHeight = 100
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text [set every repeat] = $word
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  Routine inter_training
    TextComponent text
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Finished phase 1 of training. You will now move to phase 2.
        Press space to begin.
    KeyboardComponent progression
      allowedKeys = 'space',
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
      syncScreenRefresh = False
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  Routine intro
    TextComponent welcome_text
      letterHeight = 50
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 800
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      text:
        Welcome to the experiment. You will be shown a set of words twice, then asked some questions about what you've seen.

        Press space to begin.
    KeyboardComponent progress
      allowedKeys = 'space',
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 1
      store = nothing
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  Routine blank500
    TextComponent blank
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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  Routine pre_training
    TextComponent pretrainig_text
      letterHeight = 50
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 800
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      text:
        You're about to start a block of training.

        Press space when you're ready.
    KeyboardComponent key_resp
      allowedKeys = 'space',
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine pre_testing
    TextComponent testing_intro
      letterHeight = 50
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = You have now completed training. Press space when you're ready to begin testing.
      wrapWidth = 800
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    KeyboardComponent progression2
      allowedKeys = 'space',
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine testing
    TextComponent testing_word
      font = BACS1
      letterHeight = 100
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $word
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    KeyboardComponent participant_response
      allowedKeys = 'd', 'k'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      syncScreenRefresh = False
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    TextComponent testing_text
      letterHeight = 50
      pos = (0, 300)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Does this word belong to the words you saw before?
      wrapWidth = 800
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    TextComponent keyboard_instructions
      letterHeight = 25
      pos = (0, -300)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press 'd' for yes, 'k' for no
      wrapWidth = 800
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Flow
  Routine intro
  LoopInitiator blocks loopType="TrialHandler"
    isTrials = False
    loopType = random
    nReps = 2
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    Routine pre_training
    LoopInitiator trials loopType="TrialHandler"
      Selected rows = 1:11
      conditionsFile = training.csv
      isTrials = False
      loopType = random
      nReps = 1
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      conditions:
        [OrderedDict([('word', 'Abkauk')]),
        OrderedDict([('word', 'AbkaAr')]),
        OrderedDict([('word', 'AbkauZ')]),
        OrderedDict([('word', 'AbkaJu')]),
        OrderedDict([('word', 'JAdLml')]),
        OrderedDict([('word', 'JAdLmA')]),
        OrderedDict([('word', 'JAdLmu')]),
        OrderedDict([('word', 'JAdLmJ')]),
        OrderedDict([('word', 'kGlUlG')]),
        OrderedDict([('word', 'kGlUuk')]),
        OrderedDict([('word', 'kGlUuZ')]),
        OrderedDict([('word', 'kGlUJu')]),
        OrderedDict([('word', 'UdlGQl')]),
        OrderedDict([('word', 'UdlGQu')]),
        OrderedDict([('word', 'UdlGQA')]),
        OrderedDict([('word', 'UdlGQJ')]),
        OrderedDict([('word', 'YOaAbl')]),
        OrderedDict([('word', 'YOaAbu')]),
        OrderedDict([('word', 'YOaAbA')]),
        OrderedDict([('word', 'YOaAbu')]),
        OrderedDict([('word', 'lYrual')]),
        OrderedDict([('word', 'lYruaA')]),
        OrderedDict([('word', 'lYruau')]),
        OrderedDict([('word', 'lYruaJ')]),
        OrderedDict([('word', 'lkAklG')]),
        OrderedDict([('word', 'lkAkuk')]),
        OrderedDict([('word', 'lkAkuZ')]),
        OrderedDict([('word', 'lkAkJu')]),
        OrderedDict([('word', 'GJZmlG')]),
        OrderedDict([('word', 'GJZmuk')]),
        OrderedDict([('word', 'GJZmAr')]),
        OrderedDict([('word', 'GJZmJu')]),
        OrderedDict([('word', 'Zvalvl')]),
        OrderedDict([('word', 'Zvalvu')]),
        OrderedDict([('word', 'ZvalvA')]),
        OrderedDict([('word', 'Zvalvu')]),
        OrderedDict([('word', 'ubALmu')]),
        OrderedDict([('word', 'ubALmA')]),
        OrderedDict([('word', 'ubALmu')]),
        OrderedDict([('word', 'ubALmJ')]),
        OrderedDict([('word', 'KRARmY')]),
        OrderedDict([('word', 'KRARmK')]),
        OrderedDict([('word', 'KRARmO')]),
        OrderedDict([('word', 'KRARmB')]),
        OrderedDict([('word', 'mARMCP')])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
      Routine training
      Routine blank500
    LoopTerminator trials
  LoopTerminator blocks
  Routine pre_testing
  LoopInitiator trials_2 loopType="TrialHandler"
    Selected rows = 1:41
    conditionsFile = testing.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('word', 'vAarkd'), ('condition', 0)]),
      OrderedDict([('word', 'dJNrYL'), ('condition', 0)]),
      OrderedDict([('word', 'laYmrl'), ('condition', 0)]),
      OrderedDict([('word', 'LuNZJU'), ('condition', 0)]),
      OrderedDict([('word', 'bmbNYA'), ('condition', 0)]),
      OrderedDict([('word', 'QcladY'), ('condition', 0)]),
      OrderedDict([('word', 'LckGNl'), ('condition', 0)]),
      OrderedDict([('word', 'aYQmJU'), ('condition', 0)]),
      OrderedDict([('word', 'UAcduY'), ('condition', 0)]),
      OrderedDict([('word', 'LOLkUk'), ('condition', 0)]),
      OrderedDict([('word', 'EhRmDl'), ('condition', 0)]),
      OrderedDict([('word', 'tdDdAP'), ('condition', 0)]),
      OrderedDict([('word', 'lCbcmY'), ('condition', 0)]),
      OrderedDict([('word', 'tmAKBb'), ('condition', 0)]),
      OrderedDict([('word', 'TAdhMP'), ('condition', 0)]),
      OrderedDict([('word', 'hAROKA'), ('condition', 0)]),
      OrderedDict([('word', 'EYtYRY'), ('condition', 0)]),
      OrderedDict([('word', 'EPERdB'), ('condition', 0)]),
      OrderedDict([('word', 'mBYlPE'), ('condition', 0)]),
      OrderedDict([('word', 'CmcODl'), ('condition', 0)]),
      OrderedDict([('word', 'EhRmkd'), ('condition', 1)]),
      OrderedDict([('word', 'tdDdYL'), ('condition', 1)]),
      OrderedDict([('word', 'lCbcml'), ('condition', 1)]),
      OrderedDict([('word', 'tmAKJU'), ('condition', 1)]),
      OrderedDict([('word', 'TAdhMY'), ('condition', 1)]),
      OrderedDict([('word', 'hAROKY'), ('condition', 1)]),
      OrderedDict([('word', 'EYtYRl'), ('condition', 1)]),
      OrderedDict([('word', 'EPERdJ'), ('condition', 1)]),
      OrderedDict([('word', 'mBYlYA'), ('condition', 1)])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
    Routine testing
  LoopTerminator trials_2
